PsychoPy2experiment version="2021.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = ldt_en_hi
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Routines
  Routine trial
    TextboxComponent en_w1
      anchor = top-center
      bold = False
      editable = False
      letterHeight = 0.1
      startVal [time (s)] = 0
      text [set every repeat] = $word1
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    TextboxComponent en_w2
      anchor = bottom-center
      bold = False
      editable = False
      letterHeight = 0.1
      startVal [time (s)] = 0
      text [set every repeat] = $word2
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    KeyboardComponent enkbresp
      allowedKeys = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      storeCorrect = True
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  Routine rest
    KeyboardComponent restresp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine instr
    TextboxComponent eninstrstim
      bold = False
      editable = False
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Instructions:

        A pair of commonly used english words will be flashed on the screen.
        Press the right arrow key if both the words are valid english words.
        Press the left arrow key if either one of the words or both words are not valid english words.

        Press left/right keys to try out few examples.
    KeyboardComponent enkbinstr
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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Flow
  Routine instr
  LoopInitiator en_trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'word1': 'actress', 'word2': 'actor', 'corrAns': 'right', 'category': 1},
      {'word1': 'subtraction', 'word2': 'addition', 'corrAns': 'right', 'category': 1},
      {'word1': 'continent', 'word2': 'africa', 'corrAns': 'right', 'category': 1},
      {'word1': 'explanation', 'word2': 'answer', 'corrAns': 'right', 'category': 1},
      {'word1': 'octopus', 'word2': 'arms', 'corrAns': 'right', 'category': 1},
      {'word1': 'bow', 'word2': 'arrow', 'corrAns': 'right', 'category': 1},
      {'word1': 'mustache', 'word2': 'beard', 'corrAns': 'right', 'category': 1},
      {'word1': 'mug', 'word2': 'beer', 'corrAns': 'right', 'category': 1},
      {'word1': 'disbelieve', 'word2': 'believe', 'corrAns': 'right', 'category': 1},
      {'word1': 'tricycle', 'word2': 'bicycle', 'corrAns': 'right', 'category': 1},
      {'word1': 'magazine', 'word2': 'book', 'corrAns': 'right', 'category': 1},
      {'word1': 'busy', 'word2': 'bored', 'corrAns': 'right', 'category': 1},
      {'word1': 'cauliflower', 'word2': 'broccoli', 'corrAns': 'right', 'category': 1},
      {'word1': 'sister', 'word2': 'brother', 'corrAns': 'right', 'category': 1},
      {'word1': 'tumor', 'word2': 'cancer', 'corrAns': 'right', 'category': 1},
      {'word1': 'rug', 'word2': 'carpet', 'corrAns': 'right', 'category': 1},
      {'word1': 'blackboard', 'word2': 'chalk', 'corrAns': 'right', 'category': 1},
      {'word1': 'kitchen', 'word2': 'cook', 'corrAns': 'right', 'category': 1},
      {'word1': 'policeman', 'word2': 'cop', 'corrAns': 'right', 'category': 1},
      {'word1': 'lobster', 'word2': 'crab', 'corrAns': 'right', 'category': 1}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
    Routine trial
    Routine rest
  LoopTerminator en_trials
